PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/%s_%s' % (expInfo['姓名'], expInfo['测试次数'])
  Experiment info = {'姓名': '', '测试次数': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = black
  expName = PVT
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent InstructionsText
      color = 1.0000, 1.0000, 1.0000
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        感谢您参与精神运动警觉性测试

        屏幕会在随机间隔（2-10秒）后出现数字，
        您需要在数字出现后尽快按下空格键。
        测试持续时间10分钟。

        请您准备好后，按下 空格键 开始测试
    KeyboardComponent InstrucKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
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    CodeComponent ISIcode
      Code Type = Py
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      Begin Experiment:
        # All the durations are in seconds
        minISI = 2
        maxISI = 10

        # Task duration (s)
        length_of_task = 600

        # Feedback duration ：按下后展示结果的时间
        feed = 0.5

        # A timer
        timing = core.Clock()

        # Loading the beep sound
        # warning_beep = sound.Sound('beep.wav')
      Begin Routine:
        # ISI is then set each routine
        randISI = random() * (maxISI - minISI) + minISI

        # If it is the first trial
        if PVT_Trials.thisN == 0:
            overall_timer = core.Clock()#记录刚刚开始实验的时间（第一次）
            realISI = 0

        if PVT_Trials.thisN > 0:
            # We count the duration of the feedback as part of the ISI
            realISI = feed

        # A message when participant miss
        message = 'You did not hit the button!'

        # Adding the ISI so it is saved in the datafile ISI记录randISI时间
        thisExp.addData('ISI', randISI)
      Each Frame:
        keys = dontrespond.getKeys(keyList=['space'], waitRelease=False)
        keys = [key.name for key in keys]

        # Append True to list if a key is pressed, clear list if not
        if "space" in keys:
             message = "Too soon!"
             continueRoutine = False
    TextComponent ISI_empty_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI-realISI
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    KeyboardComponent dontrespond
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $randISI-1
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  Routine Target
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    CodeComponent Target_code
      Code Type = Py
      Begin Routine:
        # Reset the timer
        timing.reset()

        # Check for response
        if message == 'Too soon!':
            # Adding 0 to Accuracy and missing to RTms
            thisExp.addData('Accuracy', 0)
            thisExp.addData('RTms', np.NAN)
            # End the Routine to continue next trial
            continueRoutine = False
      Each Frame:
        # counter in seconds
        time = int(round(timing.getTime(), 3) * 1000)
      End Routine:
        if type(Response.rt) is float:#正确情况下
            message = str(round(Response.rt * 1000))
            thisExp.addData('Accuracy', 1)
            thisExp.addData('RTms', Response.rt * 1000)#反应时间

        # PsychoPy is not running the trial for more than 29.991...超时
        if timing.getTime() >= 29.99:
                message = 'No response!'
                warning_beep.play()
                Response.rt = timing.getTime()
                thisExp.addData('RTms', np.NAN)
                thisExp.addData('Accuracy', 0)
                continueRoutine = False
    TextComponent Targetstim
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $time
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    KeyboardComponent Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine Feedback
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    TextComponent Feedback_text
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feed
      text [set every repeat] = $message
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  Routine End_task
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    CodeComponent End_task_2
      Code Type = Py
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      End Routine:
        # Get the time in the task
        time_in_task = overall_timer.getTime()

        # If time_in_task corresponds to the duration we set previously we end te task结束循环
        if time_in_task >= length_of_task:
            continueRoutine = False
            PVT_Trials.finished = True
  Routine The_end
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    TextComponent Goodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        感谢您的参与

        请按下 空格键 结束测试
    KeyboardComponent GoodbyeEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator PVT_Trials loopType="TrialHandler"
    loopType = random
    nReps = 150
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    Routine ISI
    Routine Target
    Routine Feedback
    Routine End_task
  LoopTerminator PVT_Trials
  Routine The_end
